[[model]]
name: Adaptive Antibiotic Model 
author: Ken Wang

# Initial values:
PDCompartment.P1 = 10 #10^6.58
PDCompartment.P2 = 0
doseCompart.Drug_DoseCompart = 0
PKCompartment.Drug_Central = 0
PKCompartment.Drug_P1 = 0
PKCompartment.Drug_P2 = 0


[environment]
t = 0 bind time
    

[dose]
doseAmount = 1  # Will be set later by Python script 
DoseBinary = 0  # 0 when not dosing, 1 when dosing
    bind pace   # set DoseBinary using the protocol
doseApplication = DoseBinary * doseAmount

[doseCompart]
Ka = 1 [1/h]
    desc: "absorption" rate
  
    
dot(Drug_DoseCompart) = -Ka* Drug_DoseCompart+ dose.doseApplication 
    in [ng]


[PKCompartment]
CL = 1 [mL/h]
    desc: Clearance/elimination rate from central compartment 
fu = 0.014 [dimensionless]    
    desc: plasma free fraction

Vc = 1 [mL]
    desc: Volume of the central compartment 
Qp1 = 1 [mL/h]
    desc: Transition rate between compartment 1 (central compartment) and compartment 2 (one of the peripheral compartment) 
Vp1 = 1 [mL]
    desc: Volume of the compartment 2 (one of the peripheral compartment )
Qp2 = 1 [mL/h]
    desc: Transition rate between compartment 1 (central compartment) and compartment 3 (one of the peripheral compartment) 
Vp2 = 1 [mL]
    desc: Volume of the compartment 3 (one of the peripheral compartment )
Dose= doseCompart.Ka*doseCompart.Drug_DoseCompart
dot(Drug_Central) = Dose - CL/Vc*Drug_Central-Qp1*(Drug_Central/Vc-Drug_P1/Vp1)-Qp2*(Drug_Central/Vc-Drug_P2/Vp2)
    desc: Amount of drug in central compartment unit in ng 
dot(Drug_P1) = Qp1*(Drug_Central/Vc-Drug_P1/Vp1)
    desc: Amount of drug in first peripheral compartment unit in ng
dot(Drug_P2) = Qp2*(Drug_Central/Vc-Drug_P2/Vp2)
    desc: Amount of drug in second peripheral compartment unit in ng 

Drug_Concentration_Central = Drug_Central / Vc
    desc: Concentration of drug in the central compartment unit ng/mL

[PDCompartment]

KNetgrowth = 1 #[1/h] 
    desc: rate of bacterial net growth 
   
tvbmax = 1 
    desc: maximal possible size of the inoculum in CFU/mL
    
Kmax = 1 #[1/h]
    desc: maximum killing rate of the compound 
EC50k = 1 #[ug/mL]
    desc: EC50 of antibiotic killing without any adaptation 
gamma = 1  #[dimensionless]
    desc: Hill Coefficient of killling 
beta = 1 #[dimensionless]
    desc:Maximum adaptation on EC50 
tau = 1 #[mL/h*ug] 
    desc: rate of adaptation 

Kdeath = 1 #[1/h] 
    desc: death rate of the P population 
Ksr_max=1 #[1/h] 
    desc: maximum transit rate between S and P (traditionally it was just a fraction of netgrowh but could be idependent) 
    
Drug_Concentration = PKCompartment.Drug_Concentration_Central/1000 *PKCompartment.fu
    desc:The fixed drug concentration (e.g. for in vitro TK) in ug/mL

EC50Adapted= EC50k*(1+beta*(1-exp(-Drug_Concentration*tau*environment.t)))
Ksr =  (Ksr_max/tvbmax) *(P1+P2)  # transition rate from S to P drug senstive pop
       
dot(P1) = KNetgrowth*(1-(P1+P2)/tvbmax)*P1-Ksr*P1-Kmax*Drug_Concentration^gamma/(EC50Adapted^gamma+Drug_Concentration^gamma)*P1
    desc: the growing and susceptible population of bacterial in  CFU/mL
dot(P2) = Ksr*P1- Kdeath*P2
    desc: the sleeping and non-susceptible population of bacterial in CFU/mL
        
Total_Bacterial = P1+P2
    desc: total population of bacterial in CFU/mL